PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1280, 800]
  color = $[0, 0, 0]
  expName = gabor_object_recognition
  keyboardBackend = PsychToolbox
  logging level = debug
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Routines
  Routine trial_gabor
    CodeComponent code_trial
      Code Type = Py
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      Begin Experiment:
        """
        Sets up lists of paths to image files for experiment stimuli and initializes
        some variables/values that will be used throughout the experiment.
        """

        import re
        from random import sample, choices

        def get_list_of_files(dir_name):
            """
            For the given path, gets a list of all files in the directory tree
            """
            # create a list of file and sub directory
            # names in the given directory
            # (excluding hidden files, ie those starting with a dot)
            list_of_files = [x for x in os.listdir(dir_name) if not x.startswith('.')]
            all_files = list()
            # Iterate over all the entries
            for entry in list_of_files:
                # Create full path
                full_path = os.path.join(dir_name, entry)
                # If entry is a directory then get the list of files in this directory
                if os.path.isdir(full_path):
                    all_files = all_files + get_list_of_files(full_path)
                else:
                    all_files.append(full_path)
            return all_files

        def find_roots(target_dir, root_category):
            """
            finds roots of sets of files that hold stimulus sequence images, like
            'RFP_OPP_1' for the sequence 'RFP_OPP_1_1.bmp' through 'RFP_OPP_1_12.bmp'
            """
            roots = []
            for file_path in get_list_of_files(target_dir):
                if re.findall('bmp', file_path):
                    new_root = (root_category, re.match(r'([A-Za-z].+_)[0-9]+\.bmp', file_path).group(1))
                    roots.append(new_root)
            # ensure there are no duplicates
            roots = list(set(roots))
            return roots

        # directory where all the stimuli images (or subdirectories containing the stimuli imgs)
        # are stored
        STIM_DIR = 'stimuli'
        # name of subdirectory with 'grey' (blank) stimulus images
        GREY_DIR = 'grey'
        GREY_DIR = os.path.join(STIM_DIR, GREY_DIR)
        # name of subdirectory with other (non-blank) stimuli images
        # (assuming here a hierarchical directory structure where all non-grey stimuli
        # images are stored in subdirectories of the 'non-blank' directory)
        NONBLANK_DIR = 'Gabor stimuli Sapey Boets'
        # name of sub-subdirectory with Random pattern stimuli images
        RANDOM_DIR = 'RFP_RRR'
        RANDOM_DIR = os.path.join(STIM_DIR, NONBLANK_DIR, RANDOM_DIR)
        # name of sub-subdirectory with Contour stimuli images
        CONTOUR_DIR = 'RFP_RCR'
        CONTOUR_DIR = os.path.join(STIM_DIR, NONBLANK_DIR, CONTOUR_DIR)
        # name of sub-subdirectory with Texture stimuli images
        TEXTURE_DIR = 'RFP_OPP'
        TEXTURE_DIR = os.path.join(STIM_DIR, NONBLANK_DIR, TEXTURE_DIR)
        # name of sub-subdirectory with Contour & Texture stimuli images
        CONTOUR_TEXTURE_DIR = 'RFP_RCP'
        CONTOUR_TEXTURE_DIR = os.path.join(STIM_DIR, NONBLANK_DIR, CONTOUR_TEXTURE_DIR)
        # name of sub-subdirectory with Contour # Texture Meaningful stimuli images
        CONTOUR_TEXTURE_MEANINGFUL_DIR = 'Snod_RCP'
        CONTOUR_TEXTURE_MEANINGFUL_DIR = os.path.join(
            STIM_DIR,
            NONBLANK_DIR,
            CONTOUR_TEXTURE_MEANINGFUL_DIR
        )

        # forming below lists of tuples, where each tuple has as its first
        # element the type of stimuli, and second element the filepath
        # to a stim image file (.bmp)

        # get filepath root of each image set in the 'grey'/blank category
        grey_filepath_roots = find_roots(GREY_DIR, 'grey')

        # from Sapey-Triomphe, Boets et al article:
        # "Participants performed two event-related fMRI runs. Each
        # fMRI run consisted of 67 trials: 10 presentations of each of
        # the five conditions (Random, Contour, Texture, Contour &
        # Texture Meaningless, Contour & Texture Meaningful) and
        # 17 fixation trials (baseline). "
        # in this PsychoPy experiment, there are no two separate "runs" as
        # seen from the participant's perspective, since there is no pause
        # inbetween. stimuli are still split into two "runs" of 40 non-fixation
        # trials each however, to make the distribution of trials
        # unpredictable but a bit more evenly spread out. to keep the ratio the
        # same. to keep the proportion of fixation/non-fixation trials the same,
        # here 17 * 40/50 = 13.6 ~= 14 fixation trials/"run" are used.
        # form 14 copies of the 'grey' root, to ensure 14 fixation/baseline
        # trials per run.
        grey_filepath_roots = grey_filepath_roots * 14

        # get filepath root of each image set in the nonblank categories
        # (ensuring that there are 20 sets/trials for each category)
        random_filepath_roots = find_roots(RANDOM_DIR, 'random')
        random_filepath_roots = choices(random_filepath_roots, k=20)
        contour_filepath_roots = find_roots(CONTOUR_DIR, 'contour')
        contour_filepath_roots = sample(contour_filepath_roots, 20)
        contour_texture_filepath_roots = find_roots(
            CONTOUR_TEXTURE_DIR,
            'contour_texture'
        )
        contour_texture_filepath_roots = sample(contour_texture_filepath_roots, 20)
        contour_texture_meaningful_filepath_roots = find_roots(
            CONTOUR_TEXTURE_MEANINGFUL_DIR,
            'contour_texture_meaningful'
        )
        contour_texture_meaningful_filepath_roots = sample(contour_texture_meaningful_filepath_roots, 20)

        # combine filepath roots in halves, first forming two separate
        # "runs" (see comment above), and shuffle trials within-"runs"
        run1 = (
         grey_filepath_roots +
         random_filepath_roots[:10] +
         contour_filepath_roots[:10] +
         contour_texture_filepath_roots[:10] +
         contour_texture_meaningful_filepath_roots[:10]
        )

        run2 = (
         grey_filepath_roots +
         random_filepath_roots[10:] +
         contour_filepath_roots[10:] +
         contour_texture_filepath_roots[10:] +
         contour_texture_meaningful_filepath_roots[10:]
        )
        shuffle(run1)
        shuffle(run2)

        # combine the two runs
        all_filepath_roots = run1 + run2

        # Sapey/Boets:"The Gabor patterns dynamically evolved from a random
        # orientation to a final orientation, within 5400 ms
        # (following 12 logarithmic steps, including eleven 355 ms
        # frames and one 1495 ms end frame)."
        # specify end time of each image except the last one in the sets
        # (last image is shown for a longer time than the others)
        img_duration_ls=[SHORT_DUR*mult for mult in range(1, 12)]+[999999]

        # initialize image object
        image_stimulus = visual.ImageStim(
            win=win, units='deg',
            name='image_stimulus',
            image=all_filepath_roots[0][1] + "1.bmp", mask=None,
            ori=0, pos=(0, 0), size=(IMAGE_SIZE, IMAGE_SIZE),
            color=[1,1,1], colorSpace='rgb', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=-1.0)
      Begin Routine:
        # initialize counter for stepping through each set's images
        # the filenames go from "foobar_1.bmp" up to "foobar_12.bmp"
        set_img_counter = 1

        # fetch the filepath root for the set of images to use during
        # this trial, by popping it off the list of filepath roots
        trial_root = all_filepath_roots.pop()

        # set first image to be drawn at beginning of routine
        image_stimulus.image = trial_root[1] + str(set_img_counter) + ".bmp"

        # make the polygons indicating clicks entirely transparent
        polygon_trial_clicked_left.opacity = 0
        polygon_trial_clicked_right.opacity = 0
        click_indicators_visible = False
      Each Frame:
        # DISABLED - specifying time of 5.4s in routine components instead,
        # for the sake of non-slip timing
        # check if time for when last image should stop has passed
        #if tThisFlip > SHORT_DUR*11+LONG_DUR:
        #    continueRoutine = False

        # check if the time for when previous image should stop has passed
        if tThisFlip > img_duration_ls[set_img_counter - 1]:
            image_stimulus.image = trial_root[1] + str(set_img_counter) + ".bmp"
            set_img_counter += 1
        image_stimulus.draw()

        if not click_indicators_visible and key_resp_trial.keys and trial_root[0] !='grey':
            polygon_trial_clicked_left.opacity = 1
            polygon_trial_clicked_right.opacity = 1
            click_indicators_visible = True
      End Routine:
        trials_gabor.addData('stimulus_type', trial_root[0])
        trials_gabor.addData('stimulus_path', trial_root[1])
    KeyboardComponent key_resp_trial
      allowedKeys = LEFTKEY_TUPLE
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.4
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    PolygonComponent polygon_trial_clicked_right
      fillColor = $[1,1,1]
      lineWidth = 0
      opacity = 0
      pos = (CLICKED_OFFSET, 0)
      shape = rectangle
      size = (CLICKED_SIZE, CLICKED_SIZE)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.4
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    PolygonComponent polygon_trial_clicked_left
      fillColor = $[1,1,1]
      lineWidth = 0
      opacity = 0
      pos = (-CLICKED_OFFSET, 0)
      shape = rectangle
      size = (CLICKED_SIZE, CLICKED_SIZE)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.4
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  Routine wait_for_mr_signal
    KeyboardComponent trigger_listener
      allowedKeys = MR_TRIGGERKEY_TUPLE
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_screen
    TextComponent end_text
      letterHeight = LARGE_TXTSIZE
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = The experiment is now finished. Thank you!
      units = deg
      wrapWidth = 26
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  Routine instructions_part_one
    TextComponent text_instructions_part_one
      letterHeight = MID_TXTSIZE
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 26
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      text:
        You will see images that change over time.

        Throughout the experiment, you will see a white dot in the center of the screen. Keep your eyes on it.

        In some pictures, but not all, there is a pattern.

        Press the left button to see an example of when there is a pattern.
    KeyboardComponent key_resp_instructions_part_one
      allowedKeys = LEFTKEY_TUPLE
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4.0
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    CodeComponent code_constants
      Code Type = Py
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      Before Experiment:
        ### SET EXPERIMENT CONSTANTS ###
        # trial image width/height size (in deg)
        IMAGE_SIZE = 12
        #trial 'click indicator' polygons' vertical offset
        CLICKED_OFFSET = 9
        #trial 'click indicator' polygons' size
        CLICKED_SIZE = 0.5

        # instruction screen example image size
        IMAGE_SIZE_INST = 10

        # instruction screen example image vertical offset
        IMG_INST_V_OFFSET = 1

        # instruction screen text vertical offset
        TXT_INST_V_OFFSET = -5

        # medium text size
        MID_TXTSIZE = 0.6
        LARGE_TXTSIZE = 1

        # demonstration found/not found messages
        NOTFOUND_TXT = 'Formen fanns här. Tryck höger knapp.'
        FOUND_TXT = 'Precis, formen fanns här. Tryck höger knapp.'

        # keyboard keys (or response button signals, if they are
        # converted to keyboard presses) that are to be interpreted
        # as left/right responses
        LEFT_KEY = '3'
        RIGHT_KEY = '1'
        # it's not allowed to enter non-tuple/list variables in
        # keyboard response components' 'allowed keys' fields,
        # so also specify tuples to use
        RESPONSE_KEYS = (LEFT_KEY, RIGHT_KEY)
        LEFTKEY_TUPLE = (LEFT_KEY,)
        RIGHTKEY_TUPLE = (RIGHT_KEY,)

        # 'keyboard key' that MR trigger signal is
        # converted into ('5' is commonly used)
        MR_TRIGGERKEY_TUPLE = ('5',)

        # trial image presentation durations
        # Sapey/Boets:"The Gabor patterns dynamically evolved from a random
        # orientation to a final orientation, within 5400 ms
        # (following 12 logarithmic steps, including eleven 355 ms
        # frames and one 1495 ms end frame)."
        # specify end time of each image except the last one in the sets
        # (last image is shown for a longer time than the others)
        SHORT_DUR = 0.355
        LONG_DUR = 1.495

        ### END SET EXPERIMENT CONSTANTS ###
  Routine instructions_part_two
    TextComponent text_instructions_part_two
      letterHeight = MID_TXTSIZE
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 26
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      text:
        Some of the images you see will have patterns, as in the first example.

        As soon as you see a pattern during the experiment, press the left button.

        When you have pressed the button, two small white boxes are shown.

        The experiment takes about ten minutes. A message will appear when you are done.
    KeyboardComponent key_resp_instructions_part_two
      allowedKeys = LEFTKEY_TUPLE
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 4.0
      store = nothing
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  Routine jittered_blank
    ImageComponent blank_image
      image = stimuli/grey/grey_1_1.bmp
      size = (IMAGE_SIZE, IMAGE_SIZE)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9999
      texture resolution = 512
      units = deg
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    CodeComponent blank_code
      Code Type = Py
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      Begin Experiment:
        # import 'choice' function, needed for the custom 'generate_intervals' function
        from random import choice

        def generate_intervals(total_time, step_size, min_interval, max_interval):
            """
            generates a list of intervals in seconds
            """
            if max_interval > total_time or min_interval > total_time:
                raise ValueError("max/min interval time must be lower than total time")
            if max_interval < 0 or min_interval < 0 or step_size < 0:
                raise ValueError("passed values must not be negative")
            if max_interval < min_interval:
                raise ValueError("min interval must be less than max interval")
            if min_interval%step_size != 0 or max_interval%step_size != 0:
                raise ValueError("max/min interval time must both be \
                multiples of step_size")
            num_steps = round((max_interval - min_interval) / step_size) + 1
            possible_intervals = np.linspace(min_interval, max_interval, num_steps)
            return_intervals = []
            aggregated_time = 0
            num_addition_attempts = 0
            num_runs = 0
            while aggregated_time != total_time:
                num_addition_attempts += 1
                if num_addition_attempts > 200:
                    aggregated_time = 0
                    return_intervals = []
                    num_addition_attempts = 0
                    num_runs += 1
                    if num_runs > 100:
                        raise ValueError("unable to find a sequence that fulfills the constraints, please change them")
                ok_candidate = False
                new_time_candidate = choice(possible_intervals)
                possible_new_aggr_time = new_time_candidate + aggregated_time
                if possible_new_aggr_time > total_time:
                    continue
                if possible_new_aggr_time == total_time:
                    return_intervals.append(new_time_candidate)
                    return return_intervals
                for interval in possible_intervals:
                    if (possible_new_aggr_time + interval) < total_time:
                        ok_candidate = True
                if ok_candidate:
                    aggregated_time += new_time_candidate
                    return_intervals.append(new_time_candidate)

        # get the sum total inter-trial interval duration by taking
        # the number of trials and multiplying by 0.6 (average duration
        # is to be 0.6s).
        # generate random set of intervals of lengths 0.5s, 0.6s or 0.7s,
        # that add up to the calculated sum total duration, for jitter.
        # (first multiplying each of the involved numbers by 10,
        # because integers must be used first when generating
        # durations sequence,since floats lead to issues with
        # comparison operators)
        sum_total_dur = len(all_filepath_roots) * 0.6
        interval_durs = generate_intervals(total_time=int(sum_total_dur*10),
                                       step_size=1,
                                       min_interval=5,
                                       max_interval=7)
        # dividing each interval duration by 10 now that generation is done
        interval_durs = [interval_dur/10 for interval_dur in interval_durs]

        # initialize counter for stepping through interval durations
        interval_counter = 0
      Begin Routine:
        # get this trial's interval duration
        interval_dur = interval_durs[interval_counter]
        # the image component's duration is set to 9999,
        # to achieve non-slip timing. to counteract the
        # time added to the routine timer, subtract 9999.
        # then add the actual routine duration.
        # (more information at
        # https://discourse.psychopy.org/t/confusion-
        # about-how-to-implement-non-slip-timing-
        # for-trials-with-known-end-points/4479/8)
        routineTimer.add(-9999.000000 + interval_dur)
      Each Frame:
        if tThisFlip >= interval_dur:
            continueRoutine = False
      End Routine:
        # increment interval counter by 1 to proceed to next interval duration
        # for next routine iteration
        interval_counter += 1
  Routine post_trial_question
    TextComponent post_trial_q_text
      letterHeight = 2
      pos = (0, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9999
      text = Såg du ett djur i bilden?
      units = deg
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    TextComponent post_trial_yes_text
      letterHeight = 2
      pos = (5, -5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9999
      units = deg
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      text:
        Ja
        (höger)
    TextComponent post_trial_no_text
      letterHeight = 2
      pos = (-5, -5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9999
      units = deg
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      text:
        Nej
        (vänster)
    KeyboardComponent post_trial_key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9999
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    CodeComponent post_trial_code
      Code Type = Auto->JS
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      Begin Experiment:
        # import function for randomly determining when to pose post-trial
        # question
        from random import shuffle

        # generate list of boolean values which specify if a post-trial
        # question should be posed ("Was there an animal in the picture?")
        post_trial_bools = [False] * 72 + [True] * 8
        shuffle(post_trial_bools)
        # initialize counter for going through post_trial_bools values
        post_trial_counter = 0
      Begin Routine:
        # check if post-trial question should be posed, and otherwise
        # skip it
        post_trial_bool = post_trial_bools[post_trial_counter]
        if not post_trial_bool:
            continueRoutine = False
      End Routine:
        post_trial_counter += 1
  Routine stimulus_demonstration_pattern
    CodeComponent code_demo_pattern
      Code Type = Py
      Begin Routine:
        ### check for explanations in trial code snippet
        # initialize counter for stepping through each set's images
        # the filenames go from "foobar_1.bmp" up to "foobar_12.bmp"
        set_img_counter = 1

        # set the filepath root for the set of images to use during
        # the demonstration
        demo_root = os.path.join(os.getcwd(), "stimuli", "Gabor stimuli Sapey Boets", "RFP_OPP", "RFP_OPP_1_")

        # set first image to be drawn at beginning of routine
        image_stimulus.image = demo_root + str(set_img_counter) + ".bmp"
      Each Frame:
        ### check for explanations in trial code snippet
        # check if time for when last image should stop has passed
        if tThisFlip > SHORT_DUR*11+LONG_DUR:
            continueRoutine = False
        # check if the time for when previous image should stop has passed
        if tThisFlip > img_duration_ls[set_img_counter - 1]:
            image_stimulus.image = demo_root + str(set_img_counter) + ".bmp"
            set_img_counter += 1
        image_stimulus.draw()
      End Routine:
        image_stimulus.autoDraw = False
    TextComponent text_demo_pattern
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine stimulus_demonstration_random
    CodeComponent code_demo_random
      Code Type = Py
      Begin Routine:
        ### check for explanations in trial code snippet
        # initialize counter for stepping through each set's images
        # the filenames go from "foobar_1.bmp" up to "foobar_12.bmp"
        set_img_counter = 1

        # set the filepath root for the set of images to use during
        # the demonstration
        demo_root = os.path.join(os.getcwd(), "stimuli", "Gabor stimuli Sapey Boets", "RFP_RRR", "RFP_RRR_1_")

        # set first image to be drawn at beginning of routine
        image_stimulus.image = demo_root + str(set_img_counter) + ".bmp"
      Each Frame:
        ### check for explanations in trial code snippet
        # check if time for when last image should stop has passed
        if tThisFlip > SHORT_DUR*11+LONG_DUR:
            continueRoutine = False
        # check if the time for when previous image should stop has passed
        if tThisFlip > img_duration_ls[set_img_counter - 1]:
            image_stimulus.image = demo_root + str(set_img_counter) + ".bmp"
            set_img_counter += 1
        image_stimulus.draw()
      End Routine:
        image_stimulus.autoDraw = False
    TextComponent text_demo_random
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions_inter_demo
    TextComponent text_instructions_inter_demo
      letterHeight = MID_TXTSIZE
      pos = (0, TXT_INST_V_OFFSET)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 26
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      text:
        Did you see the pattern?

        Press the left button to see an example of when there is no pattern.
    KeyboardComponent key_resp_instructions_inter_demo
      allowedKeys = LEFTKEY_TUPLE
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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    ImageComponent img_inter_demo
      image = stimuli/demo_img/RFP_OPP_1_12_highlighted.bmp
      pos = (0, IMG_INST_V_OFFSET)
      saveStartStop = False
      size = (IMAGE_SIZE_INST, IMAGE_SIZE_INST)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = deg
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Flow
  Routine instructions_part_one
  Routine stimulus_demonstration_pattern
  Routine instructions_inter_demo
  Routine stimulus_demonstration_random
  Routine instructions_part_two
  Routine wait_for_mr_signal
  LoopInitiator trials_gabor loopType="TrialHandler"
    loopType = random
    nReps = len(all_filepath_roots)
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    Routine trial_gabor
    Routine jittered_blank
  LoopTerminator trials_gabor
  Routine end_screen
